PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'Session': '001'}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [900, 700]
  color = $[0,0,0]
  colorSpace = hsv
  expName = Assignment2_psychology
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Routines
  Routine Thankyou
    TextComponent Thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thanks for taking the xyz

        press space/enter to exit
    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
  Routine Trial_exo
    TextComponent text
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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    KeyboardComponent stimuli_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    PolygonComponent rect_left
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[1,1,1]
      lineWidth = 7
      pos = (-6, 0)
      shape = rectangle
      size = (6, 6)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.4
      units = cm
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    PolygonComponent rect_right
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[1,1,1]
      lineWidth = 7
      pos = (6, 0)
      shape = rectangle
      size = (6,6)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.4
      units = cm
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    PolygonComponent rect_highlight
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[255, 255, 0]
      lineWidth = 7
      pos [set every repeat] = $Pos_highlight_exo
      shape = rectangle
      size = (6,6)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.2
      units = cm
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    PolygonComponent cross_cue
      fillColor = $[255, 255, 0]
      lineColor = $[255, 255, 0]
      ori = 45
      pos [set every repeat] = $Pos_cue_exo
      shape = cross
      size = (2, 2)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.2
      units = cm
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    KeyboardComponent resp_stimuli
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine Introduction_exo
    TextComponent Experiment_introduction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Intro

        press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Introduction_endo
    TextComponent Experiment_introduction_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Intro

        press space to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial_endo
    TextComponent text_2
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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    KeyboardComponent stimuli_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    PolygonComponent rect_left_2
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[1,1,1]
      lineWidth = 7
      pos = (-6, 0)
      shape = rectangle
      size = (6, 6)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.8
      units = cm
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    PolygonComponent rect_right_2
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[1,1,1]
      lineWidth = 7
      pos = (6, 0)
      shape = rectangle
      size = (6, 6)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.8
      units = cm
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    ImageComponent Arrow
      image [set every repeat] = $Image_arrow
      pos = (0, 5)
      size = (2, 1)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.2
      units = cm
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    PolygonComponent rect_highlight_2
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[255,255,0]
      lineWidth = 7
      pos [set every repeat] = $Pos_highlight_endo
      shape = rectangle
      size = (6, 6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      units = cm
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    PolygonComponent cross_cue_2
      fillColor = $[255, 255, 0]
      lineColor = $[255, 255, 0]
      ori = 45
      pos [set every repeat] = $Pos_cue_exo
      shape = cross
      size = (2, 2)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
      units = cm
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    KeyboardComponent resp_stimuli_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.2
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Flow
  Routine Introduction_exo
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrows', None), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', '"right"'), ('Image_arrows', None), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', '"right"')]),
      OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrows', None), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', 'right'), ('Image_arrows', None), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', 'right')]),
      OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrows', None), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', 'right'), ('Image_arrows', None), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', 'right')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrows', None), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', '"left"')])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
    Routine Trial_exo
    Routine Blank
  LoopTerminator trials
  Routine Introduction_endo
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = experiment.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrow', 'square_yellow.png'), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', '"right"'), ('Image_arrow', 'square_yellow.png'), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', '"right"')]),
      OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrow', 'square_yellow.png'), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', 'right'), ('Image_arrow', '"square_yellow.png"'), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', 'right')]),
      OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrow', 'square_yellow.png'), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', 'right'), ('Image_arrow', 'square_yellow.png'), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', 'right')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrow', 'square_yellow.png'), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', '"left"')])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
    Routine Trial_endo
  LoopTerminator trials_2
  Routine Thankyou
