PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'Session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  color = $[0,0,0]
  colorSpace = hsv
  expName = Assignment2_psychology
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Routines
  Routine Thankyou
    TextComponent Thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you for participating in the experiment!
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    KeyboardComponent key_resp_2
      allowedKeys = 'space', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
    TextComponent Fixation
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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  Routine Trial_exo
    TextComponent Fixation_point
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = +
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    PolygonComponent rect_left
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[1,1,1]
      lineWidth = 8
      pos = (-7, 0)
      shape = rectangle
      size = (6, 6)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.7
      units = cm
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    PolygonComponent rect_right
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[1,1,1]
      lineWidth = 8
      pos = (7, 0)
      shape = rectangle
      size = (6,6)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.7
      units = cm
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    PolygonComponent rect_highlight
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[255, 255, 0]
      lineWidth = 9
      pos [set every repeat] = $Pos_highlight_exo
      shape = rectangle
      size = (6,6)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.3
      units = cm
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    PolygonComponent cross_cue
      fillColor = $[255, 255, 0]
      lineColor = $[255, 255, 0]
      ori = 45
      pos [set every repeat] = $Pos_cue_exo
      shape = cross
      size = (2, 2)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.3
      units = cm
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    KeyboardComponent resp_stimuli
      allowedKeys = 'left','right', 
      correctAns = $correctresp_exo
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.6
      store = all keys
      storeCorrect = True
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  Routine Introduction_exo
    TextComponent Experiment_introduction
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        You will see a Fixation point and two boxes.

        Press the left arrow key if the 'X' is in the left box and right arrow key if the 'X' is in the right box.

        Press space to continue
    KeyboardComponent resp_continue_exo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine Introduction_endo
    TextComponent Experiment_introduction_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You will see a Fixation point and two boxes.

        Press the left arrow key if the 'X' is in the left box and right arrow key if the 'X' is in the right box.

        Press space to continue
    KeyboardComponent resp_endo
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial_endo
    TextComponent fixationPoint
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
      text = +
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    PolygonComponent rect_left_2
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[1,1,1]
      lineWidth = 7
      pos = (-7, 0)
      shape = rectangle
      size = (6, 6)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.7
      units = cm
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    PolygonComponent rect_right_2
      fillColor = $[0,0,0]
      fillColorSpace = hsv
      lineColor = $[1,1,1]
      lineWidth = 7
      pos = (7, 0)
      shape = rectangle
      size = (6, 6)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.7
      units = cm
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    ImageComponent Arrow
      image [set every repeat] = $Image_arrow
      pos = (0, 3.5)
      size = (3, 0.75)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.3
      units = cm
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    PolygonComponent cross_cue_2
      fillColor = $[255, 255, 0]
      lineColor = $[255, 255, 0]
      ori = 45
      pos [set every repeat] = $Pos_cue_exo
      shape = cross
      size = (2, 2)
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.3
      units = cm
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    KeyboardComponent resp_stimuli_2
      allowedKeys = 'left','right'
      correctAns = $correctresp_endo
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.6
      storeCorrect = True
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  Routine Start_experiment
    TextComponent Start_Experiment
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press any key to start the experiment
    KeyboardComponent resp_start
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Start_experiment
  Routine Introduction_exo
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment.xlsx
    isTrials = False
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrows', None), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', '"right"'), ('Image_arrows', None), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', '"right"')]),
      OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrows', None), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', 'right'), ('Image_arrows', None), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', 'right')]),
      OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrows', None), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', 'right'), ('Image_arrows', None), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', 'right')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrows', None), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', '"left"')])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
    Routine Trial_exo
    Routine Blank
  LoopTerminator trials
  Routine Introduction_endo
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = experiment.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrow', 'leftArrow.png'), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', '"right"'), ('Image_arrow', 'rightArrow.png'), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', '"right"')]),
      OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrow', 'leftArrow.png'), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', 'right'), ('Image_arrow', 'rightArrow.png'), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', 'right')]),
      OrderedDict([('Pos_highlight_exo', [-6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrow', 'leftArrow.png'), ('Pos_highlight_endo', [-6, 0]), ('correctresp_endo', '"left"')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [6, 0]), ('correctresp_exo', 'right'), ('Image_arrow', 'rightArrow.png'), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', 'right')]),
      OrderedDict([('Pos_highlight_exo', [6, 0]), ('Pos_cue_exo', [-6, 0]), ('correctresp_exo', '"left"'), ('Image_arrow', 'rightArrow.png'), ('Pos_highlight_endo', [6, 0]), ('correctresp_endo', '"left"')])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
    Routine Trial_endo
    Routine Blank
  LoopTerminator trials_2
  Routine Thankyou
